CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_Plate_(?P<type>[A-Za-z]{1,2})_p00_0_(?P<Well>[A-Za-z][0-9]{2})f(?P<Site>[0-9]{2})d(?P<Wavelength>[0-9])(?P<format>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Wavelength "2") (file doesnot contain "Simple") (metadata does format ".TIF")
    Name to assign these images:DDX4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "1") (metadata does format ".TIF")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "0") (metadata does format ".TIF") (file doesnot contain "labels") (metadata does type "R")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "0") (file does contain "labels.tif")
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    Name to assign these objects:stardist_nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:Plate

MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:stardist_nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:6|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
    Select the objects to filter:stardist_nuclei
    Name the output objects:Filtered_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:11
    Filter using a maximum measurement value?:Yes
    Maximum value:38
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Filtered_nuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Distance - B
    Select the input image:DDX4
    Number of pixels by which to expand the primary objects:12
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.1
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:IdentifySecondaryObjects
    Select the smaller identified objects:Filtered_nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:DDX4, DNA, EdU
    Select objects to measure:Cytoplasm, Filtered_nuclei, IdentifySecondaryObjects

MeasureColocalization:[module_num:10|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
    Select images to measure:DDX4, DNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Filtered_nuclei, IdentifySecondaryObjects
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:Yes
    Method for Costes thresholding:Faster

MeasureObjectIntensityDistribution:[module_num:11|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
    Select images to measure:DDX4, DNA, EdU
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:IdentifySecondaryObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:7
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
MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Cytoplasm, Filtered_nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ClassifyObjects:[module_num:13|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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:positive
    Name the output objects:cytoDDX4
    Select the object name:Filtered_nuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Elsewhere...|C:\\Users\\olsen\\Desktop\\test\\v7_test
    Rules or classifier file name:cytoDDX4_model_v3.model
    Allow fuzzy feature matching?:Yes

ClassifyObjects:[module_num:14|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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:positive
    Name the output objects:cytoDDX4_EdU
    Select the object name:Filtered_nuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Elsewhere...|C:\\Users\\olsen\\Desktop\\test\\v7_test
    Rules or classifier file name:EdU_cytoDDX4_model_v1.model
    Allow fuzzy feature matching?:Yes

CombineObjects:[module_num:15|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
    Select initial object set:cytoDDX4
    Select object set to combine:cytoDDX4_EdU
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

FilterObjects:[module_num:16|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
    Select the objects to filter:Filtered_nuclei
    Name the output objects:Filtered_cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_EdU
    Filter using a minimum measurement value?:Yes
    Minimum value:0.04
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:25
    Filter using a maximum measurement value?:Yes
    Maximum value:38
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
MaskObjects:[module_num:17|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
    Select objects to be masked:Filtered_cells
    Name the masked objects:Filtered_somatics
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CombinedObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

FilterObjects:[module_num:18|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
    Select the objects to filter:Filtered_nuclei
    Name the output objects:Filtered_DDX4
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_DDX4
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:13
    Filter using a maximum measurement value?:Yes
    Maximum value:35
    Select the measurement to filter by:Intensity_MaxIntensity_EdU
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.0399
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
CombineObjects:[module_num:19|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
    Select initial object set:Filtered_DDX4
    Select object set to combine:CombinedObjects
    Select how to handle overlapping objects:Merge
    Name the combined object set:Combined_DDX4

MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:cytoDDX4
    Select neighboring objects to measure:cytoDDX4
    Method to determine neighbors:Within a specified distance
    Neighbor distance:8
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToDatabase:[module_num:21|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|C:\\Users\\olsen\\Desktop\\Analysis Results\\P53_GC_E1_day7_DDX4_EdU_results
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:v7_P53_GC_E1_day7_DDX4_EdU.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cytoplasm,Filtered_nuclei,IdentifySecondaryObjects
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:v7_P53_GC_E1_day7_DDX4_EdU
    Which objects should be used for locations?:Filtered_nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:Classifier_table
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:Yes
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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